PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Read the scenario carefully and press any key for options.
        Press 'a' for chosing 'option A' and press 'b' for chosing 'option B'.
        Click on the displayed square to continue
          press any key to proceed:)
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Welcome
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome
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  Routine Thank_you
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Thank you for participating.
          Have a good day.
  Routine displaying_scenario
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    TextComponent scenario
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Scenario
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    TextComponent options
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 10
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      text:
        Option A:Accept it and walk away.
        Option B:Continue playing so that you may gain money or lose more money.
          Press the key corresponding to the option you want to chose.
    KeyboardComponent key_resp
      allowedKeys = 'a','b'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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  Routine square
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    PolygonComponent polygon
      fillColor = white
      pos [set every repeat] = $position
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    MouseComponent mouse
      clickable = $polygon
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4.5
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  Routine blank
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    PolygonComponent polygon_2
      fillColor = white
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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Flow
  Routine Welcome
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = loss aversion.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Scenario': 'Assume that you have lost 100 rupees in casino.You have 2 options:', 'position': (0, 0)},
      {'Scenario': 'Assume that you have lost 1000 rupees in casino.You have 2 options:', 'position': (0.2, 0.2)},
      {'Scenario': 'Assume that you got 1000 rupees in casino.You have 2 options:', 'position': (-0.2, -0.2)},
      {'Scenario': 'Assume that you got 100 rupees in casino.You have 2 options:', 'position': (-0.3, 0.2)}]
    Routine displaying_scenario
    Routine square
    Routine blank
  LoopTerminator trials
  Routine Thank_you
